PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH1_v2022.2.4
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent polygonColour
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWhite
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonType
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.3, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textInput
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyResp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codeResp
      Code Type = Py
      Begin Routine:
        respDisplay = ""


        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micResp
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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    CodeComponent codeMicResp
      Code Type = Py
      Each Frame:
        if t > 3:
            continueRoutine = False
    CodeComponent codeSaveResp
      Code Type = Py
      Before Experiment:
        count = 0
      Begin Routine:
        count = count + 1
      End Routine:
        clipFilename = "recording_" + str(count) + ".wav"
        micResp.lastClip.save(os.path.join(micRespRecFolder, clipFilename))

        '''
        # save mic recordings
        for tag in mic.clips:
            for i, clip in enumerate(mic.clips[tag]):
                clipFilename = 'recording_mic_%s.wav' % tag
                # if there's more than 1 clip with this tag, append a counter for all beyond the first
                if i > 0:
                    clipFilename += '_%s' % i
                clip.save(os.path.join(micRecFolder, clipFilename))

        '''
  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = We are going to start the experiment!
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine InstructionsMain2
    TextboxComponent textboxInstrMain2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Remember: 
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    TextboxComponent textboxInstrMain2_2
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = If the rectangle is 
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    TextboxComponent textboxInstrMain2_3
      alignment = center-left
      bold = True
      color = -1.0000, -1.0000, 0.0902
      editable = False
      letterHeight = 0.03
      pos = (0.245, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = blue,
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    TextboxComponent textboxInstrMain2_4
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.32, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text =  you will need to 
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    TextboxComponent textboxInstrMain2_5
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.55, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = type
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    TextboxComponent textboxInstrMain2_6
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.625, 0.2)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = the name of the picture.
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    TextboxComponent textboxInstrMain2_7
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = If the rectangle is 
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    TextboxComponent textboxInstrMain2_8
      alignment = center-left
      bold = True
      color = 1.0000, 1.0000, -1.0000
      editable = False
      letterHeight = 0.03
      pos = (0.245, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = yellow,
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    TextboxComponent textboxInstrMain2_9
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.365, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = you will have to 
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    TextboxComponent textboxInstrMain2_10
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.59, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = say out loud
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    TextboxComponent textboxInstrMain2_11
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0.78, 0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = the name of the picture.
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    TextboxComponent textboxInstrMain2_12
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
      text = Press SPACE to begin!
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    KeyboardComponent keyInstrMain2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine pause
    TextboxComponent textboxPause
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Short break!

        Press SPACE to continue.
    KeyboardComponent keyPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent codePause
      Code Type = Py
      Begin Routine:
        if trialsREPSWITCH.thisN == 0 or trialsREPSWITCH.thisN % 95 != 0:
            continueRoutine = False

            #checks if the value of trialsREPSWITCH.thisN is either 0 or not divisible evenly by 95
            #If either of these conditions is true, the continueRoutine variable is set to False,
            #indicating that some loop or routine should be skipped or terminated.
  Routine Goodbye
    TextboxComponent textboxGoodbye
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment!

        Thank you for participating!
  Routine InstructionsMain1
    TextboxComponent textboxInstrMain1
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, 0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        A few reminders before we start:

        You should name the images
    TextboxComponent textboxInstrMain1_2
      alignment = center-left
      bold = True
      editable = False
      letterHeight = 0.03
      pos = (0.4, 0.2358)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        as fast and accurately as possible.
    TextboxComponent textboxInstrMain1_3
      alignment = center-left
      bold = False
      editable = False
      letterHeight = 0.03
      pos = (0, -0.1)
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        When you speak, make sure you say only one word, in a clear voice.

        Try to keep your hands above the keyboard during the whole session.

        And please, don’t speak while typing!


        You will be able to take a short break every N minutes.


        Press SPACE to continue
    KeyboardComponent keyInstrMain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine blank500
  Routine InstructionsMain1
  Routine InstructionsMain2
  Routine blank500
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_178.png', 'correctAns': 'puente', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim1_Set1', 'order': 1, 'psychopy_order': 0},
      {'image': 'REPSWITCH1/PICTURE_178.png', 'correctAns': 'puente', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'stimulus': 'Stim1_Set1', 'order': 2, 'psychopy_order': 1},
      {'image': 'REPSWITCH1/PICTURE_319.png', 'correctAns': 'vaca', 'respModal': 'type', 'frameColor': 'darkblue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'stimulus': 'Stim1_Set4', 'order': 3, 'psychopy_order': 2},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'set': 1, 'stimulus': 'Stim2_Set1', 'order': 4, 'psychopy_order': 3},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'set': 1, 'stimulus': 'Stim2_Set1', 'order': 5, 'psychopy_order': 4},
      {'image': 'REPSWITCH1/PICTURE_719.png', 'correctAns': 'baño', 'respModal': 'type', 'frameColor': 'darkblue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'set': 1, 'stimulus': 'Stim2_Set4', 'order': 6, 'psychopy_order': 5}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
    Routine ITI
    Routine trial
    Routine blank500
    Routine pause
  LoopTerminator trialsREPSWITCH
  Routine blank500
  Routine Goodbye
