PsychoPy2experiment version="2022.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = REPSWITCH_1
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent codeBreaks
      Code Type = Py
      Begin Experiment:
        trialCount=0
        breakTrials = [96, 192, 288]
      Begin Routine:
        trialCount = trialCount+1
      Each Frame:
        if trialCount not in breakTrials:
            continueRoutine = False
    PolygonComponent polygonColour
      fillColor [set every repeat] = $frameColour
      lineColor [set every repeat] = $frameColour
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWhite
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imageObject
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonType
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent textInput
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyResp
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codeResp
      Code Type = Py
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      Begin Routine:
        respDisplay = ""
        #maxDigits = 15

        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micResp
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      transcribe = False
      transcribeBackend = Google
      transcribeLang = sp-ES
      transcribeWords = correctAns
      trimSilent = False
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  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine Instructions
    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task you will have to name the objects you see on the screen.
        If the background is blue, type the name of the object.
        If the background is yellow, say the name of the object out loud.


        Press SPACE to begin!
    KeyboardComponent keyInstructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating!
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  Routine ITI
    PolygonComponent fixationITI
      durationEstim = 1.5
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+1
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  Routine practiceTrial
    PolygonComponent polygonCol
      fillColor [set every repeat] = $frameColor
      lineColor [set every repeat] = $frameColor
      shape = rectangle
      size = (0.55, 0.55)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonWh
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent imagePractice
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygonText
      fillColor = 0.9216, 0.9216, 0.9216
      lineColor = 0.9216, 0.9216, 0.9216
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent textPractice
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $respDisplay
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    KeyboardComponent keyPractice
      allowedKeys = 'a','b','c','d','e','f','g','h','i','j','k','l','m','n','ñ','o','p','q','r','s','t','u','v','w','x','y','z','backspace'
      correctAns = $correctAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = all keys
      storeCorrect = True
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    CodeComponent codePractice
      Code Type = Py
      Begin Routine:
        respDisplay = ""
        #maxDigits = 15

        #key logger defaults
        last_len = 0
        key_list = []

        polygonType.opacity = 0
      Each Frame:
        #if a new key has been pressed since last time
        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            #elif("return" in key_list):
                #remove the enter key
                #key_list.pop()

                #and end the trial if we have at least 2 digits
                #if(len(key_list) >= 2):
                    #continueRoutine = False


            #now loop through and remove any extra characters that may exist
            #while(len(key_list) > maxDigits):
                #key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)

        # check if the participant has started typing for the box to appear behind the sentence
        if len(key_list) > 0:
            polygonType.opacity = 1
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
    MicrophoneComponent micPractice
      channels = auto
      device = default
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      transcribe = False
      transcribeBackend = Google
      transcribeLang = en-US
      trimSilent = False
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  Routine famPhase
    ImageComponent imageFam
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyFam
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent textFam
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $correctAns
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Flow
  Routine Welcome
  Routine blank500
  Routine Instructions
  Routine blank500
  LoopInitiator famTrials loopType="TrialHandler"
    conditionsFile = repswitch_fam.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_128.png', 'correctAns': 'muñeca'},
      {'image': 'REPSWITCH1/PICTURE_142.png', 'correctAns': 'vaso'},
      {'image': 'REPSWITCH1/PICTURE_152.png', 'correctAns': 'caracol'},
      {'image': 'REPSWITCH1/PICTURE_16.png', 'correctAns': 'cazador'},
      {'image': 'REPSWITCH1/PICTURE_175.png', 'correctAns': 'pintor'},
      {'image': 'REPSWITCH1/PICTURE_178.png', 'correctAns': 'puente'},
      {'image': 'REPSWITCH1/PICTURE_19.png', 'correctAns': 'pavo'},
      {'image': 'REPSWITCH1/PICTURE_199.png', 'correctAns': 'falda'},
      {'image': 'REPSWITCH1/PICTURE_235.png', 'correctAns': 'aguja'},
      {'image': 'REPSWITCH1/PICTURE_242.png', 'correctAns': 'cartero'},
      {'image': 'REPSWITCH1/PICTURE_264.png', 'correctAns': 'mano'},
      {'image': 'REPSWITCH1/PICTURE_271.png', 'correctAns': 'conejo'},
      {'image': 'REPSWITCH1/PICTURE_30.png', 'correctAns': 'granja'},
      {'image': 'REPSWITCH1/PICTURE_319.png', 'correctAns': 'vaca'},
      {'image': 'REPSWITCH1/PICTURE_320.png', 'correctAns': 'iglesia'},
      {'image': 'REPSWITCH1/PICTURE_354.png', 'correctAns': 'cabra'},
      {'image': 'REPSWITCH1/PICTURE_377.png', 'correctAns': 'babero'},
      {'image': 'REPSWITCH1/PICTURE_381.png', 'correctAns': 'fresa'},
      {'image': 'REPSWITCH1/PICTURE_411.png', 'correctAns': 'puño'},
      {'image': 'REPSWITCH1/PICTURE_48.png', 'correctAns': 'bombero'},
      {'image': 'REPSWITCH1/PICTURE_487.png', 'correctAns': 'cesta'},
      {'image': 'REPSWITCH1/PICTURE_517.png', 'correctAns': 'cuerda'},
      {'image': 'REPSWITCH1/PICTURE_552.png', 'correctAns': 'manzana'},
      {'image': 'REPSWITCH1/PICTURE_576.png', 'correctAns': 'guante'}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
    Routine ITI
    Routine famPhase
    Routine blank500
  LoopTerminator famTrials
  LoopInitiator trialsPractice loopType="TrialHandler"
    conditionsFile = repswitch_practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'},
      {'image': 'REPSWITCH1/PICTURE_612.png', 'correctAns': 'rana', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T'},
      {'image': 'REPSWITCH1/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F'},
      {'image': 'REPSWITCH1/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'},
      {'image': 'REPSWITCH1/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'repeat', 'sequence': 1, 'target': 'T'},
      {'image': 'REPSWITCH1/PICTURE_570.png', 'correctAns': 'toro', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F'},
      {'image': 'REPSWITCH1/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'speak', 'frameColor': 'yellow', 'repSwitch': 'nontarget', 'sequence': 1, 'target': 'NT'},
      {'image': 'REPSWITCH1/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'switch', 'sequence': 2, 'target': 'T'},
      {'image': 'REPSWITCH1/PICTURE_733.png', 'correctAns': 'gafas', 'respModal': 'type', 'frameColor': 'blue', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT'}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
    Routine ITI
    Routine practiceTrial
    Routine blank500
  LoopTerminator trialsPractice
  LoopInitiator trialsREPSWITCH loopType="TrialHandler"
    conditionsFile = repswitch.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image': 'REPSWITCH1/PICTURE_1.png', 'correctAns': 'ratón', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'stimulus': 'Stim1_Set1'},
      {'image': 'REPSWITCH1/PICTURE_1.png', 'correctAns': 'ratón', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'stimulus': 'Stim1_Set1'},
      {'image': 'REPSWITCH1/PICTURE_599.png', 'correctAns': 'nube', 'respModal': 'type', 'frameColour': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'stimulus': 'Stim1_Set3'},
      {'image': 'REPSWITCH1/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'stimulus': 'Stim2_Set1'},
      {'image': 'REPSWITCH1/PICTURE_110.png', 'correctAns': 'mesa', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'repeat', 'sequence': 2, 'target': 'T', 'stimulus': 'Stim2_Set1'},
      {'image': 'REPSWITCH1/PICTURE_610.png', 'correctAns': 'miel', 'respModal': 'type', 'frameColour': 'blue', 'repSwitch': 'filler', 'sequence': 1, 'target': 'F', 'stimulus': 'Stim2_Set3'},
      {'image': 'REPSWITCH1/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'speak', 'frameColour': 'yellow', 'repSwitch': 'nontarget', 'sequence': 2, 'target': 'NT', 'stimulus': 'Stim3_Set1'},
      {'image': 'REPSWITCH1/PICTURE_12.png', 'correctAns': 'sirena', 'respModal': 'type', 'frameColour': 'blue', 'repSwitch': 'switch', 'sequence': 1, 'target': 'T', 'stimulus': 'Stim3_Set1'}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
    Routine ITI
    Routine trial
    Routine blank500
  LoopTerminator trialsREPSWITCH
  Routine Goodbye
